<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.3"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:eph="clr-namespace:Bonsai.Ephys;assembly=Bonsai.Ephys"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>Set Bonvision params</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="DisplayDevice" />
              <Property Name="WindowState" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateWindow">
                <gl:Width>1440</gl:Width>
                <gl:Height>2500</gl:Height>
                <gl:VSync>On</gl:VSync>
                <gl:SwapSync>false</gl:SwapSync>
                <gl:ClearColor>Gray</gl:ClearColor>
                <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                <gl:CursorVisible>true</gl:CursorVisible>
                <gl:Location xsi:nil="true" />
                <gl:WindowBorder>Hidden</gl:WindowBorder>
                <gl:WindowState>Fullscreen</gl:WindowState>
                <gl:DisplayDevice>Second</gl:DisplayDevice>
                <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
                <gl:TargetUpdateFrequency xsi:nil="true" />
                <gl:RenderState />
                <gl:GraphicsMode>
                  <gl:ColorFormat>
                    <gl:Red>8</gl:Red>
                    <gl:Green>8</gl:Green>
                    <gl:Blue>8</gl:Blue>
                    <gl:Alpha>8</gl:Alpha>
                  </gl:ColorFormat>
                  <gl:Depth>16</gl:Depth>
                  <gl:Stencil>0</gl:Stencil>
                  <gl:Samples>0</gl:Samples>
                  <gl:AccumulatorFormat>
                    <gl:Red>0</gl:Red>
                    <gl:Green>0</gl:Green>
                    <gl:Blue>0</gl:Blue>
                    <gl:Alpha>0</gl:Alpha>
                  </gl:AccumulatorFormat>
                  <gl:Buffers>2</gl:Buffers>
                  <gl:Stereo>false</gl:Stereo>
                </gl:GraphicsMode>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:TextureResources">
                <gl:Textures>
                  <gl:TextureConfiguration xsi:type="gl:Texture2D">
                    <gl:Name>DynamicVideo</gl:Name>
                    <gl:Width xsi:nil="true" />
                    <gl:Height xsi:nil="true" />
                    <gl:InternalFormat>Rgba</gl:InternalFormat>
                    <gl:WrapS>Repeat</gl:WrapS>
                    <gl:WrapT>Repeat</gl:WrapT>
                    <gl:MinFilter>Nearest</gl:MinFilter>
                    <gl:MagFilter>Nearest</gl:MagFilter>
                  </gl:TextureConfiguration>
                </gl:Textures>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="res:LoadResources" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:RenderFrame" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicView.bonsai">
              <Left>-100</Left>
              <Right>100</Right>
              <Bottom>-100</Bottom>
              <Top>100</Top>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>DrawStimuli</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawImage.bonsai">
              <Angle>0</Angle>
              <TextureName>DynamicVideo</TextureName>
              <ExtentX>126.5</ExtentX>
              <ExtentY>87.5</ExtentY>
              <LocationX>0</LocationX>
              <LocationY>-32</LocationY>
              <Layer>0</Layer>
              <ScaleX>1</ScaleX>
              <ScaleY>1</ScaleY>
              <ShiftX>0</ShiftX>
              <ShiftY>0</ShiftY>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateFrame" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>Data\BV_SparseNoise\</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Saving Dir" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Init Variables</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>22</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Seed" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:CreateRandom">
                <num:Seed>22</num:Seed>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="InitialSyncState" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Sync</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>RepCounter</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Saving Dir" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>Data\BV_SparseNoise\</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Saving Dir</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>SparseNoise_Log_.bin</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Bin FileName</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>TimerExpired</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>FinalGrayScreen</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawStimuli</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
              <ExtentX>200</ExtentX>
              <ExtentY>200</ExtentY>
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <Layer>0</Layer>
              <Angle>0</Angle>
              <ColorR>0.5</ColorR>
              <ColorG>0.5</ColorG>
              <ColorB>0.5</ColorB>
              <ColorA>1</ColorA>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateFrame" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>EventArgs.Time</Selector>
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="GreaterThanOrEqual">
              <Operand xsi:type="DoubleProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="7" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>InitialGray Screen</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawStimuli</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
              <ExtentX>200</ExtentX>
              <ExtentY>200</ExtentY>
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <Layer>0</Layer>
              <Angle>0</Angle>
              <ColorR>0.5</ColorR>
              <ColorG>0.5</ColorG>
              <ColorB>0.5</ColorB>
              <ColorA>1</ColorA>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="ActiveQuads" />
        <Property Name="GridSize" />
        <Property Name="Duration" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>SparseNoise Group</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Duration" />
              <Property Name="ActiveQuads" />
              <Property Name="GridSize" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Collections.SparseNoise.bonsai">
              <Duration>PT0.5S</Duration>
              <ActiveQuads>4</ActiveQuads>
              <GridSize>
                <Width>7</Width>
                <Height>8</Height>
              </GridSize>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:MatrixWriter">
                <dsp:Path>Y:\fong\Rob\Data\pilotReceptiveField\SparseNoise_Log_.bin</dsp:Path>
                <dsp:Suffix>Timestamp</dsp:Suffix>
                <dsp:Overwrite>false</dsp:Overwrite>
                <dsp:Layout>ColumnMajor</dsp:Layout>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Sink">
              <Name>TriggerSyncQuad</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:ElementIndex" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Index</Selector>
                  </Expression>
                  <Expression xsi:type="Add">
                    <Operand xsi:type="IntProperty">
                      <Value>1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Mod">
                    <Operand xsi:type="IntProperty">
                      <Value>2</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Sync</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="MulticastSubject">
                    <Name>RepCounter</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="2" To="7" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateTexture">
                <gl:TextureName>DynamicVideo</gl:TextureName>
                <gl:TextureTarget>Texture2D</gl:TextureTarget>
                <gl:InternalFormat>Rgba</gl:InternalFormat>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT3M</rx:DueTime>
          <rx:Period>PT0S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT24M</rx:DueTime>
          <rx:Period>PT0S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="GroupWorkflow">
        <Name>Sync Square</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Sync</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ColorR" />
                <Property Name="ColorG" />
                <Property Name="ColorB" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawStimuli</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
              <ExtentX>30</ExtentX>
              <ExtentY>20</ExtentY>
              <LocationX>90</LocationX>
              <LocationY>-90</LocationY>
              <Layer>0</Layer>
              <Angle>0</Angle>
              <ColorR>1</ColorR>
              <ColorG>1</ColorG>
              <ColorB>1</ColorB>
              <ColorA>1</ColorA>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="eph:Rhd2000EvalBoard">
            <eph:BitFileName>C:\Users\bme-fong\Desktop\Bonsai.Examples.Ephys\rhd2000.bit</eph:BitFileName>
            <eph:SampleRate>SampleRate30000Hz</eph:SampleRate>
            <eph:ExternalFastSettleEnabled>false</eph:ExternalFastSettleEnabled>
            <eph:LowerBandwidth>0.1</eph:LowerBandwidth>
            <eph:UpperBandwidth>7500</eph:UpperBandwidth>
            <eph:DspCutoffFrequency>1</eph:DspCutoffFrequency>
            <eph:DspEnabled>true</eph:DspEnabled>
            <eph:CableDelayA xsi:nil="true" />
            <eph:CableDelayB xsi:nil="true" />
            <eph:CableDelayC xsi:nil="true" />
            <eph:CableDelayD xsi:nil="true" />
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>AmplifierData</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="dsp:SelectChannels">
            <dsp:Channels>
              <dsp:int>29</dsp:int>
              <dsp:int>30</dsp:int>
            </dsp:Channels>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="dsp:MatrixWriter">
            <dsp:Path>C:\Users\bme-fong\Desktop\newRecordingSession August\Ephys.bin</dsp:Path>
            <dsp:Suffix>Timestamp</dsp:Suffix>
            <dsp:Overwrite>false</dsp:Overwrite>
            <dsp:Layout>ColumnMajor</dsp:Layout>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="eph:AdcScale">
            <eph:AdcType>Electrode</eph:AdcType>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="dsp:FrequencyFilter">
            <dsp:SampleRate>30000</dsp:SampleRate>
            <dsp:Cutoff1>55</dsp:Cutoff1>
            <dsp:Cutoff2>0.1</dsp:Cutoff2>
            <dsp:KernelLength>60</dsp:KernelLength>
            <dsp:FilterType>BandPass</dsp:FilterType>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="dsp:FrequencyFilter">
            <dsp:SampleRate>44100</dsp:SampleRate>
            <dsp:Cutoff1>6000</dsp:Cutoff1>
            <dsp:Cutoff2>65</dsp:Cutoff2>
            <dsp:KernelLength>60</dsp:KernelLength>
            <dsp:FilterType>BandPass</dsp:FilterType>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="dsp:DetectSpikes">
            <dsp:Delay>20</dsp:Delay>
            <dsp:Length>60</dsp:Length>
            <dsp:Threshold>
              <dsp:double>-100</dsp:double>
            </dsp:Threshold>
            <dsp:WaveformRefinement>AlignPeaks</dsp:WaveformRefinement>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>BoardAdcData</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="dsp:SelectChannels">
            <dsp:Channels>
              <dsp:int>4</dsp:int>
              <dsp:int>6</dsp:int>
            </dsp:Channels>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="dsp:MatrixWriter">
            <dsp:Path>C:\Users\bme-fong\Desktop\newRecordingSession August\photodiode.bin</dsp:Path>
            <dsp:Suffix>Timestamp</dsp:Suffix>
            <dsp:Overwrite>false</dsp:Overwrite>
            <dsp:Layout>ColumnMajor</dsp:Layout>
          </Combinator>
        </Builder>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="13" Label="Source3" />
      <Edge From="6" To="10" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="12" Label="Source1" />
      <Edge From="9" To="10" Label="Source2" />
      <Edge From="10" To="13" Label="Source1" />
      <Edge From="11" To="12" Label="Source2" />
      <Edge From="12" To="13" Label="Source2" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="16" To="24" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>